(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")
(FixedImageDimension 2)
(MovingImageDimension 2)

// **************** Main Components **************************

(Registration "MultiResolutionRegistration")
(Interpolator "BSplineInterpolator")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Optimizer "AdaptiveStochasticGradientDescent")
(Transform "AffineTransform")
(Metric "AdvancedNormalizedCorrelation")

// ***************** Transformation **************************

(HowToCombineTransforms "Compose")

// ******************* Similarity measure *********************

(ErodeMask "false")

// ******************** Multiresolution **********************

(NumberOfResolutions 4)

// ******************* Optimizer ****************************

(MaximumNumberOfIterations 500)

// **************** Image sampling **********************

(NumberOfSpatialSamples 2048)
(NewSamplesEveryIteration "true")
(ImageSampler "Random")
(MaximumNumberOfSamplingAttempts 10)

// ************* Interpolation and Resampling ****************

(BSplineInterpolationOrder 1)
(FinalBSplineInterpolationOrder 3)
(DefaultPixelValue 0)
(WriteResultImage "true")
(ResultImageFormat "png")
